PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = image_stim
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You will see a series of images.
        Please rate each image after it is displayed.
        Press any key to start.
    KeyboardComponent key_resp
      allowedKeys = 'space', 'left', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine image_stim
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    ImageComponent image_disp
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine fixation
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine rating
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      letterHeight = 0.05
      pos = (0, -150)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = pix
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How realistic do you think this image is?
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    KeyboardComponent key_resp_2
      allowedKeys = 'return','left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Initial position of the slider
        current_slider_pos = slider.markerPos

        # Ensure markerPos is initialized to avoid NoneType issues
        if current_slider_pos is None:
            current_slider_pos = slider.ticks[0]

        # Define the slider's range based on its ticks
        slider_min = min(slider.ticks)
        slider_max = max(slider.ticks)

        # Clear the keyboard events
        key_resp.clearEvents()
        key_resp_2.clearEvents()

        dummy = key_resp_2.getKeys()
        print(dummy)
      Each Frame:
        # Get the keys pressed
        keys = key_resp_2.getKeys()

        # Adjust the slider position based on key presses
        for key in keys:
            print(key.name)
            if key.name == 'left':
                current_slider_pos -= 1  # Move left
            elif key.name == 'right':
                current_slider_pos += 1  # Move right
            elif key.name == 'return':
                # Confirm selection and end routine
                thisExp.addData('final_slider_position', slider.markerPos)
                continueRoutine = False

            # Ensure the position stays within the slider's range
            current_slider_pos = max(slider_min, min(slider_max, current_slider_pos))

            # Update the slider position
            slider.markerPos = current_slider_pos
      End Routine:
        # Save the final slider position if needed
        thisExp.addData('final_slider_position', slider.markerPos)
  Routine isi
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import random
        t_isi = random.uniform(0, 1)
    PolygonComponent polygon_2
      fillColor = -0.0039, 1.0000, 0.6627
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_isi
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Flow
  Routine welcome
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'imgs/img0.png')]),
      OrderedDict([('image', 'imgs/img1.png')]),
      OrderedDict([('image', 'imgs/img2.png')]),
      OrderedDict([('image', 'imgs/img3.png')]),
      OrderedDict([('image', 'imgs/img4.png')]),
      OrderedDict([('image', 'imgs/img5.png')]),
      OrderedDict([('image', 'imgs/img6.png')]),
      OrderedDict([('image', 'imgs/img7.png')]),
      OrderedDict([('image', 'imgs/img8.png')]),
      OrderedDict([('image', 'imgs/img9.png')])]
    Routine image_stim
    Routine rating
    Routine isi
  LoopTerminator trials
