PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = stroop
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome to the Stroop task
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will see words (either “green” or “red”) in different colors (also either “green” or “red”). Importantly, you need to respond to the COLOR of the word and you need to ignore the actual word. You respond with the arrow keys:

        GREEN color = left RED color = right

        (Press ‘enter’ to start the experiment!)
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent init_fix
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    PolygonComponent init_fix2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent init_fix3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine stim
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    TextComponent stim_txt
      color [set every repeat] = $stim_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_word
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
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    PolygonComponent init_fix_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_isi
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    PolygonComponent init_fix2_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_isi
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    PolygonComponent init_fix3_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_isi
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    CodeComponent t_isi
      Code Type = Py
      Before Experiment:
        import random
        t_isi = random.uniform(0, 1)
  Routine checker
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        #stimColor = stim_txt._foreColor.rgb
        stimColor = stim_color
        print(stimColor, key_resp_2.keys)

        if stimColor == 'red' and key_resp_2.keys == 'left':
            text = 'correct'
        elif stimColor == 'red' and key_resp_2.keys == 'right':
            text = 'wrong'
        elif stimColor == 'green' and key_resp_2.keys == 'right':
            text = 'correct'
        elif stimColor == 'green' and key_resp_2.keys == 'left':
            text = 'wrong'
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $text
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Flow
  Routine welcome
  Routine instructions
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stims.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')])]
    Routine stim
    Routine checker
    Routine isi
  LoopTerminator trials
